// ********** Image Types

(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)


// ********** Components

(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
//(ImageSampler "RandomCoordinate")
(ImageSampler "Random")
(Interpolator "LinearInterpolator")
(Metric "AdvancedMattesMutualInformation")
(Optimizer "AdaptiveStochasticGradientDescent")
(Transform "AffineTransform")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(BSplineTransformSplineOrder 3)

// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 1)
(ImagePyramidSchedule  1 1 1)

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

// ********** Metric

(NumberOfHistogramBins 32)
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 1)
(MovingKernelBSplineOrder 3)
(UseFastAndLowMemoryVersion "true")

// ********** Optimizer

// Maximum number of iterations in each resolution level:

(MaximumNumberOfIterations 200)
(NumberOfSpatialSamples 5000)
(AutomaticParameterEstimation "true")
(ASGDParameterEstimationMethod "DisplacementDistribution")
(MaximumStepLengthRatio 2.0)
// ********** Transform

(FinalGridSpacingInPhysicalUnits 10.0 10.0 10.0)
(GridSpacingSchedule 4.0 2.0 1.0)
(HowToCombineTransforms "Compose")
(AutomaticTransformInitialization "true")
(AutomaticTransformInitializationMethod "CenterOfGravity")
(CenterOfGravityUseBonyInfo "true")
(NumberOfSamplesForCenteredTransformInitialization 50000)
(LowerThresholdForCenterGravity 200)
(AutomaticScalesEstimation "true")

// ********** Several

(ShowExactMetricValue "false")
(ExactMetricSampleGridSpacing 2)
(ExactMetricEveryXIterations 5)
(ErodeMask "false")
(UseDirectionCosines "true")
(NewSamplesEveryIteration "true")
(UseRandomSampleRegion "false")

// ********** Output settings
//the format of resulting deformed moving image
(ResultImageFormat "mha")
//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)
(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(WriteResultImageAfterEachResolution "false")
(WritePyramidImagesAfterEachResolution "false")
(WriteResultImage "false")
(UseBinaryFormatForTransformationParameters "true")

